PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Fukushima
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine Fixation
    PolygonComponent FixationShape
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Preparation
    TextComponent PrepareAction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Prepare action
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    CodeComponent PreparationCode
      Code Type = Auto->JS
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      Begin Routine:
        dt = datetime.now()
        timestamp = datetime.timestamp(dt)
        desc = 'action_' + str(cur_index) + '_prepare'
        event(port, desc, timestamp)
        print(desc + str(timestamp))
  Routine Action
    TextComponent MoveShow_Choice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Move/Show
        Choice
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        dt = datetime.now()
        timestamp = datetime.timestamp(dt)
        desc = 'action_' + str(cur_index) + '_move'
        event(port, desc, timestamp)
        print(desc + str(timestamp))
      End Routine:
        dt = datetime.now()
        timestamp = datetime.timestamp(dt)
        desc = 'action_' + str(cur_index) + '_move'
        event(port, desc, timestamp)
        print(desc + str(timestamp))
  Routine RecordGroundTruth
    TextComponent GroundTruthInputMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        1 何を出しましたか？
        (1. チョキ 　2. グー 　3. パー)
    ButtonComponent ScissorButton
      bold = True
      callback = scissor_click(1)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent RockBotton
      bold = True
      callback = rock_click(1)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent PaperButton
      bold = True
      callback = paper_click(1)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 3
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  Routine WelcomeRoutine
    TextComponent WelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to this experiment
        Press SPACE
    KeyboardComponent WelcomeKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent IntialCode
      Code Type = Auto->JS
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      Before Experiment:
        import serial
        from datetime import datetime

        def scissor_click(pid):
            thisExp.addData('Action' + str(cur_index) + '_gt_'  + str(pid), 1)

        def rock_click(pid):
            thisExp.addData('Action' + str(cur_index) + '_gt_' + str(pid), 2)

        def paper_click(pid):
            thisExp.addData('Action' + str(cur_index) + '_gt_' + str(pid), 3)

        cur_index = 1

        port = serial.Serial('COM3', 115200)

        def event(port, desc, timestamp):
            win.callOnFlip(port.write, str.encode('1'))
            thisExp.addData(desc, timestamp)
  Routine GoobyeRoutine
  Routine RecordGroundTruth2
    TextComponent GroundTruthInputMessage2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        2 何を出しましたか
        (1. チョキ　2. グー 　3. パー)
    ButtonComponent ScissorButton2
      bold = True
      callback = scissor_click(2)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.2, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent RockButton2
      bold = True
      callback = rock_click(2)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent PaperButton2
      bold = True
      callback = paper_click(2)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = 3
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    CodeComponent indexControlCode_2
      Code Type = Auto->JS
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      End Routine:
        cur_index += 1
  Routine a
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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      text:
        表示するテキスト

        改行もできます
Flow
  Routine WelcomeRoutine
  LoopInitiator ActionLoop loopType="TrialHandler"
    loopType = random
    nReps = 51
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    Routine Fixation
    Routine Preparation
    Routine Action
    Routine Fixation
    Routine RecordGroundTruth
    Routine RecordGroundTruth2
  LoopTerminator ActionLoop
  Routine GoobyeRoutine
